u:Sim/HalfValue = 5.000000e-01
u:Sim/SIGMA2FWHM = 2.354818e+00
u:Sim/FWHM2SIGMA = 4.246610e-01

d:Sim/ElectronProductionCut = 0.500000 mm
d:Ph/Default/ForRegion/Inpatient/CutForAllParticles = 0.001000 mm
s:Sim/WorldMaterial = "G4_AIR"

includeFile = matRad_cube.txt

s:Ge/World/Material = Sim/WorldMaterial
d:Ge/World/HLX=200.0 cm
d:Ge/World/HLY=200.0 cm
d:Ge/World/HLZ=200.0 cm
b:Ge/World/Invisible = "TRUE"

s:Ge/BeamSpot/Parent = "Nozzle"
s:Ge/BeamSpot/Type = "Group"
d:Ge/BeamSpot/TransX = Tf/Beam/PosX/Value mm
d:Ge/BeamSpot/TransY = Tf/Beam/PosY/Value mm

s:Ge/Nozzle/Parent = "Isocenter"
s:Ge/Nozzle/Type = "Group"

s:Ge/Isocenter/Parent = "Gantry"
s:Ge/Isocenter/Type = "Group"
d:Ge/Isocenter/RotX = +90. deg
d:Ge/Isocenter/RotY = 0. deg
d:Ge/Isocenter/RotZ = +90. deg

s:Ge/Gantry/Parent = "Couch"
s:Ge/Gantry/Type = "Group"
d:Ge/Gantry/RotX = 0. deg
d:Ge/Gantry/RotY = 0. deg
d:Ge/Gantry/RotZ = -1 * Sim/GantryAngle deg

s:Ge/Couch/Parent = "World"
s:Ge/Couch/Type = "Group"
d:Ge/Couch/TransX = 0. cm
d:Ge/Couch/TransY = 0. cm
d:Ge/Couch/TransZ = 0. cm
d:Ge/Couch/RotX = 0. deg
d:Ge/Couch/RotY = -1 * Sim/CouchAngle deg
d:Ge/Couch/RotZ = 0. deg

s:Sim/ParticleName = "proton"
u:Sim/ParticleMass = 1.0
d:Sim/GantryAngle = 270.000000 deg
d:Sim/CouchAngle = 0.000000 deg
d:Tf/TimelineStart = 0. ms
d:Tf/TimelineEnd = 144760 ms
i:Tf/NumberOfSequentialTimes = 14476
dv:Tf/Beam/Spot/Times = 14476 10      20      30      40      50      60      70      80      90     100     110     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144760 ms
s:Tf/Beam/Energy/Function = "Step"
dv:Tf/Beam/Energy/Times = Tf/Beam/Spot/Times ms
dv:Tf/Beam/Energy/Values = 14476 63.4483      63.4483      63.4483      63.4483      63.4483      63.4483      63.4483      63.4483      63.4483      63.4483      63.4483      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90.3225 MeV
s:Tf/Beam/FocusFWHM/Function = "Step"
dv:Tf/Beam/FocusFWHM/Times = Tf/Beam/Spot/Times ms
dv:Tf/Beam/FocusFWHM/Values = 14476 25.5         25.5         25.5         25.5         25.5         25.5         25.5         25.5         25.5         25.5         25.5         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17.6 mm
s:Tf/Beam/AngleX/Function = "Step"
dv:Tf/Beam/AngleX/Times = Tf/Beam/Spot/Times ms
dv:Tf/Beam/AngleX/Values = 14476 -0.0053272  -0.0053272  -0.0053272  -0.0053272  -0.0053272  -0.0053272  -0.0053272  -0.0053272  -0.0053272  -0.0053272  -0.0053272  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0 rad
s:Tf/Beam/AngleY/Function = "Step"
dv:Tf/Beam/AngleY/Times = Tf/Beam/Spot/Times ms
dv:Tf/Beam/AngleY/Values = 14476 0.0012684   0.0010147  0.00076102  0.00050735  0.00025367           0 -0.00025367 -0.00050735 -0.00076102  -0.0010147  -0.0012684   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0 rad
s:Tf/Beam/PosX/Function = "Step"
dv:Tf/Beam/PosX/Times = Tf/Beam/Spot/Times ms
dv:Tf/Beam/PosX/Values = 14476 -8.57179     -6.85743     -5.14307     -3.42872     -1.71436            0      1.71436      3.42872      5.14307      6.85743      8.57179     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0 mm
s:Tf/Beam/PosY/Function = "Step"
dv:Tf/Beam/PosY/Times = Tf/Beam/Spot/Times ms
dv:Tf/Beam/PosY/Values = 14476 -36.0015     -36.0015     -36.0015     -36.0015     -36.0015     -36.0015     -36.0015     -36.0015     -36.0015     -36.0015     -36.0015     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0 mm
s:Tf/Beam/Current/Function = "Step"
dv:Tf/Beam/Current/Times = Tf/Beam/Spot/Times ms
iv:Tf/Beam/Current/Values = 14476 27     27     27     26     26     26     26     26     27     27     27     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8532

d:Ge/Nozzle/TransZ = -1126.000000 mm
d:Ge/Nozzle/RotX = Tf/Beam/AngleX/Value rad
d:Ge/Nozzle/RotY = Tf/Beam/AngleY/Value rad
d:Ge/Nozzle/RotZ = 0.0 rad
s:So/PencilBeam/BeamParticle = Sim/ParticleName
#i:So/PencilBeam/NumberOfHistoriesInRun = Tf/Beam/Current/Value MeV
d:So/PencilBeam/BeamEnergy = Tf/Beam/Energy/Value MeV
d:So/PencilBeam/BeamPositionSpreadX = Tf/Beam/FocusFWHM/Value mm * Sim/FWHM2SIGMA
d:So/PencilBeam/BeamPositionSpreadY = Tf/Beam/FocusFWHM/Value mm * Sim/FWHM2SIGMA
i:So/PencilBeam/NumberOfHistoriesInRun = Tf/Beam/Current/Value
u:So/PencilBeam/BeamEnergySpread = 0. #
s:So/PencilBeam/Type = "Beam" # Beam, Isotropic, Emittance or PhaseSpace
s:So/PencilBeam/Component = "BeamSpot"
s:So/PencilBeam/BeamPositionDistribution = "Gaussian" # None, Flat or Gaussian
s:So/PencilBeam/BeamPositionCutoffShape = "Ellipse" # Rectangle or Ellipse (if Flat or Gaussian)
d:So/PencilBeam/BeamPositionCutoffX = 100. mm # X extent of position (if Flat or Gaussian)
d:So/PencilBeam/BeamPositionCutoffY = 100. mm # Y extent of position (if Flat or Gaussian)
s:So/PencilBeam/BeamAngularDistribution = "None" # None, Flat or Gaussian
d:Ge/Patient/TransX      = 69.000000 mm
d:Ge/Patient/TransY      = 0.000000 mm
d:Ge/Patient/TransZ      = 0.000000 mm
d:Ge/Patient/RotX=0. deg
d:Ge/Patient/RotY=0. deg
d:Ge/Patient/RotZ=0. deg
# MODULES
sv:Ph/Default/Modules = 7 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4h-elastic_HP" "g4stopping" "g4ion-QMD" "g4radioactivedecay"
